PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Step2_Loopit
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Routines
  Routine Instruction
    TextComponent InstructionText
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You will see a series of dog pictures.
        Please follow the instructions and
        select the picture that you find cuter.
  Routine Trial
    ImageComponent DogImage
      image [set every repeat] = $Cond1
      pos = (.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent DogImage2
      image [set every repeat] = $Cond2
      pos = (-.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp
      allowedKeys = 'a','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text
      color = red
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Please select which one is cuter. a for left, d for Right
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = DogCond.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('dog', 'dog/1.jpg'), ('Cond', 1)]),
      OrderedDict([('dog', 'dog/2.jpg'), ('Cond', -1)]),
      OrderedDict([('dog', 'dog/3.jpg'), ('Cond', 1)]),
      OrderedDict([('dog', 'dog/4.jpg'), ('Cond', -1)]),
      OrderedDict([('dog', 'dog/5.jpg'), ('Cond', 1)]),
      OrderedDict([('dog', 'dog/6.jpg'), ('Cond', -1)])]
    Routine Trial
  LoopTerminator trials
